run("Grid/Collection stitching", "type=[Filename defined position] order=[Defined by filename         ] grid_size_x=14 grid_size_y=10 tile_overlap=12 first_file_index_x=1 first_file_index_y=1 directory=G:/20190411_UC_U343_nNos-Ai14_pump99_p61_F_optical/run1/computational_stitching/last_z_ch1 file_names=x_{x}_y_{y}.tif output_textfile_name=TileConfiguration.txt fusion_method=[Linear Blending] regression_threshold=0.1 max/avg_displacement_threshold=1 absolute_displacement_threshold=10 compute_overlap subpixel_accuracy computation_parameters=[Save computation time (but use more RAM)] image_output=[Write to disk] output_directory=G:/test");
